<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\paco_viv_box1\TaskControl\Animals\F\2026-05-29_12-41-51_learn_ego_allo\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>base_name</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector" />
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>video.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\paco_viv_box1\TaskControl\Animals\F\2026-05-29_12-41-51_learn_ego_allo\bonsai_video.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.ExposureEndLineStatusAll,ChunkData.FrameID,ChunkData.Timestamp</Selector>
        <Selector>ChunkData.ExposureEndLineStatusAll,ChunkData.FrameID,ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\paco_viv_box1\TaskControl\Animals\F\2026-05-29_12-41-51_learn_ego_allo\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.ExposureEndLineStatusAll</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="13" Label="Source1" />
      <Edge From="3" To="15" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>