<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\LattePanda\TaskControl\Animals\123\2025-07-02_16-49-35_learn_to_fixate_ego_allo\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>base_name</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>video.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\LattePanda\TaskControl\Animals\123\2025-07-02_16-49-35_learn_to_fixate_ego_allo\bonsai_video.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.LineStatusAll,ChunkData.FrameID,ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\LattePanda\TaskControl\Animals\123\2025-07-02_16-49-35_learn_to_fixate_ego_allo\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.LineStatusAll</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="12" Label="Source1" />
      <Edge From="3" To="14" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>